# Instrument driver configuration file.

[General settings]

# The name is shown in all the configuration windows
name: NI PXIe-5652

# The version string should be updated whenever changes are made to this config file
version: 1.0

# Name of folder containing the code defining a custom driver. Do not define this item
# or leave it blank for any standard driver based on the built-in VISA interface.
driver_path: NI_PXIe5652

# General VISA settings for the instrument.
[VISA settings]

# Enable or disable communication over the VISA protocol (True or False)
# If False, the driver will not perform any operations (unless there is a custom driver).
use_visa = False

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
[frequency]
datatype: DOUBLE
unit: GHz
def_value: 1.0

[power_level]
datatype: DOUBLE
unit: dBm
def_value: 0

[output_enabled]
datatype: BOOLEAN
def_value:False