# Instrument driver configuration file.

[General settings]

# The name is shown in all the configuration windows
name: SignalCore SC5510A (Dual)

# The version string should be updated whenever changes are made to this config file
version: 1.0

# Name of folder containing the code defining a custom driver. Do not define this item
# or leave it blank for any standard driver based on the built-in VISA interface.
driver_path: SignalCore_SC5510A

# General VISA settings for the instrument.
[VISA settings]

# Enable or disable communication over the VISA protocol (True or False)
# If False, the driver will not perform any operations (unless there is a custom driver).
use_visa = False

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
# [Channel]
# datatype: DOUBLE
# def_value: 0

# [Frequency]
# datatype: DOUBLE
# unit: Hz
# def_value: 1E9

# [Amplitude]
# datatype: DOUBLE
# unit: dBm
# def_value: -20

# [Output]
# datatype: BOOLEAN
# def_value: False


[Frequency Channel 1]
group:1
datatype: DOUBLE
unit: Hz
low_lim: 100
high_lim: 6E9
def_value: 1E9

[Power Channel 1]
group:1
datatype: DOUBLE
unit: dBm
def_value: 0

[Output Channel 1]
group:1
datatype: BOOLEAN
def_value: False
